# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Moku Pro Multi-Instrument

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Moku_Pro_Multi
# Define that the driver is a Signal Generator
signal_generator: True

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
[Instrument - Slot1]
datatype: COMBO
combo_def_1: WaveformGenerator 
combo_def_2: ArbitraryWaveformGenerator
combo_def_3: OSCillOSCope
combo_def_4: SpectrumAnalyzer
combo_def_5: LockInAmp
combo_def_6: FrequencyResponseAnalyzer
section: Slot 1

[OSC TimeSpan - 1]
datatype: DOUBLE
unit: s
def_value: 1E-3
low_lim: 4E-9
section: Slot 1
state_quant: Instrument - Slot1
state_value_1: OSCillOSCope


[OSC Ch1 Data - 1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
state_quant: Instrument - Slot1
state_value_1: OSCillOSCope
section: Slot 1



[OSC Ch2 Data - 1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
state_quant: Instrument - Slot1
state_value_1: OSCillOSCope
section: Slot 1

[WVG Ch1 Function - 1]
datatype: COMBO
def_value: Off
combo_def_1: Off
combo_def_2: Sine
combo_def_3: Square
combo_def_4: Ramp
combo_def_5: Pulse
combo_def_6: DC
section: Slot 1
state_quant: Instrument - Slot1
state_value_1: WaveformGenerator
group: Channel 1
[WVG Ch1 Frequency - 1]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 100E6
state_quant: WVG Ch1 Function - 1
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 Amplitude - 1]
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: WVG Ch1 Function - 1
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
low_lim: 4E-3
high_lim: 10
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 DC Offset - 1]
datatype: DOUBLE
def_value: 0.0
unit: V
low_lim: -5
high_lim: 5
state_quant: WVG Ch1 Function - 1
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 DC Level - 1]
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -5
high_lim: 5
state_quant: WVG Ch1 Function - 1
state_value_1: DC
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 Phase - 1]
datatype: DOUBLE
unit: deg
def_value: 0.0
state_quant: WVG Ch1 Function - 1
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
low_lim: 0
high_lim: 360
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1


[WVG Ch1 Ramp Symmetry - 1]
datatype: DOUBLE
def_value: 50
unit: %
state_quant: WVG Ch1 Function - 1
state_value_1: Ramp
low_lim: 0
high_lim: 100
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 Duty Cycle - 1]
datatype: DOUBLE
def_value: 50
unit: %
state_quant: WVG Ch1 Function - 1
state_value_1: Square
low_lim: 0
high_lim: 100
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 Pulse Width - 1]
datatype: DOUBLE
def_value: 100E-9
unit: s
state_quant: WVG Ch1 Function - 1
state_value_1: Pulse
low_lim: 4E-9
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 Edge Time - 1]
datatype: DOUBLE
def_value: 10E-9
unit: s
state_quant: WVG Ch1 Function - 1
state_value_1: Pulse
low_lim: 4E-9
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 Modulation - 1]
datatype: BOOLEAN
def_value: 0
state_quant: WVG Ch1 Function - 1
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse

section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 Trigger Source - 1]
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: Input1
combo_def_3: Input2
combo_def_4: Input3
combo_def_5: Input4
combo_def_6: Output1
combo_def_7: Output2
combo_def_8: Output3
combo_def_9: Output4
state_quant: WVG Ch1 Modulation - 1
state_value_1: 1

section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 Mod Type - 1]
datatype: COMBO
def_value: Amplitude
combo_def_1: Amplitude
combo_def_2: Frequency
combo_def_3: Phase
combo_def_4: Burst
combo_def_5: Sweep

state_quant:WVG Ch1 Modulation - 1
state_value_1: 1
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 Mod Freq - 1]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 125E6
state_quant: WVG Ch1 Mod Type - 1
state_value_1: Amplitude
state_value_2: Frequency
state_value_3: Phase

section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 AM Depth - 1]
datatype: DOUBLE
unit: %
def_value: 50
low_lim: 0
high_lim: 100
state_quant: WVG Ch1 Mod Type - 1
state_value_1: Amplitude
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 FM Depth - 1]
datatype: DOUBLE
unit: Hz
def_value: 50
low_lim: 0
state_quant: WVG Ch1 Mod Type - 1
state_value_1: Frequency
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 PM Depth - 1]
datatype: DOUBLE
unit: deg
def_value: 90
low_lim: 0
high_lim:360
state_quant: WVG Ch1 Mod Type - 1
state_value_1: Phase
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch2 Function - 1]
datatype: COMBO
def_value: Off
combo_def_1: Off
combo_def_2: Sine
combo_def_3: Square
combo_def_4: Ramp
combo_def_5: Pulse
combo_def_6: DC
section: Slot 1
state_quant: Instrument - Slot1
state_value_1: WaveformGenerator
group: Channel 2

[WVG Ch2 Frequency - 1]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 100E6
state_quant: WVG Ch2 Function - 1
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2

[WVG Ch2 Amplitude - 1]
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: WVG Ch2 Function - 1
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
low_lim: 4E-3
high_lim: 10
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2

[WVG Ch2 DC Offset - 1]
datatype: DOUBLE
def_value: 0.0
unit: V
low_lim: -5
high_lim: 5
state_quant: WVG Ch2 Function - 1
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2

[WVG Ch2 DC Level - 1]
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -5
high_lim: 5
state_quant: WVG Ch2 Function - 1
state_value_1: DC
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2

[WVG Ch2 Phase - 1]
datatype: DOUBLE
unit: deg
def_value: 0.0
state_quant: WVG Ch2 Function - 1
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
low_lim: 0
high_lim: 360
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2


[WVG Ch2 Ramp Symmetry - 1]
datatype: DOUBLE
def_value: 50
unit: %
state_quant: WVG Ch2 Function - 1
state_value_1: Ramp
low_lim: 0
high_lim: 100
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2

[WVG Ch2 Duty Cycle - 1]
datatype: DOUBLE
def_value: 50
unit: %
state_quant: WVG Ch2 Function - 1
state_value_1: Square
low_lim: 0
high_lim: 100
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2

[WVG Ch2 Pulse Width - 1]
datatype: DOUBLE
def_value: 100E-9
unit: s
state_quant: WVG Ch2 Function - 1
state_value_1: Pulse
low_lim: 4E-9
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2

[WVG Ch2 Edge Time - 1]
datatype: DOUBLE
def_value: 10E-9
unit: s
state_quant: WVG Ch2 Function - 1
state_value_1: Pulse
low_lim: 4E-9
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
group: Channel 2

[WVG Ch2 Modulation - 1]
datatype: BOOLEAN
def_value: 0
state_quant: WVG Ch2 Function - 1
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
group: Channel 2

section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
[WVG Ch2 Trigger Source - 1]
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: Input1
combo_def_3: Input2
combo_def_4: Input3
combo_def_5: Input4
combo_def_6: Output1
combo_def_7: Output2
combo_def_8: Output3
combo_def_9: Output4
state_quant: WVG Ch2 Modulation - 1
state_value_1: 1
group: Channel 2

section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
[WVG Ch2 Mod Type - 1]
datatype: COMBO
def_value: Amplitude
combo_def_1: Amplitude
combo_def_2: Frequency
combo_def_3: Phase
combo_def_4: Burst
combo_def_5: Sweep
group: Channel 2

state_quant:WVG Ch2 Modulation - 1
state_value_1: 1
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
[WVG Ch2 Mod Freq - 1]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 125E6
state_quant: WVG Ch2 Mod Type - 1
state_value_1: Amplitude
state_value_2: Frequency
state_value_3: Phase
group: Channel 2

section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
[WVG Ch2 AM Depth - 1]
datatype: DOUBLE
unit: %
def_value: 50
low_lim: 0
high_lim: 100
state_quant: WVG Ch2 Mod Type - 1
state_value_1: Amplitude
group: Channel 2

section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
[WVG Ch2 FM Depth - 1]
datatype: DOUBLE
unit: Hz
def_value: 50
low_lim: 0
state_quant: WVG Ch2 Mod Type - 1
state_value_1: Frequency
group: Channel 2

section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator
[WVG Ch2 PM Depth - 1]
datatype: DOUBLE
unit: deg
def_value: 90
low_lim: 0
high_lim:360
state_quant: WVG Ch2 Mod Type - 1
state_value_1: Phase
group: Channel 2

section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: WaveformGenerator

[AWG Ch1 Premade File? - 1]
datatype:BOOLEAN
def_value: 0
state_quant: Instrument - Slot1
state_value_1: ArbitraryWaveformGenerator
section: Slot 1
group: Channel 1

[AWG Ch1 Range of x - 1]
datatype: STRING
def_value: np.linspace(0,1,100)
state_quant: AWG Ch1 Premade File? - 1
state_value_1: 0
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1
[AWG Ch1 f(x) in Python - 1]
datatype: STRING
def_value: 0.1*x
state_quant: AWG Ch1 Premade File? - 1
state_value_1: 0
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1
[AWG Ch1 Filename - 1]
datatype: STRING
def_value: C:/Users/Triton/Documents/Labber_Scripts/Moku_Pro_AWG/wave.txt
state_quant: AWG Ch1 Premade File? - 1
state_value_1: 1
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1
[AWG Ch1 Frequency - 1]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 100E6
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1
[AWG Ch1 Amplitude - 1]
datatype: DOUBLE
unit: V
def_value: 1.0
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1
[AWG Ch1 Sample Rate - 1]
datatype:COMBO
combo_def_1: Auto
combo_def_2: 1.25Gs
combo_def_3: 625Ms
combo_def_4: 312.5Ms
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1

[AWG Ch1 Output Load - 1]
datatype:COMBO
combo_def_1: 50Ohm
combo_def_2: 1MOhm
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1
[AWG Ch1 Modulate - 1]
datatype:COMBO
combo_def_1: Off
combo_def_2: Burst
combo_def_3: Pulse
def_value: Off
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1

[AWG Ch1 Trigger Source - 1]
datatype: COMBO
def_value: Input1
combo_def_1: Input1
combo_def_2: Input2
combo_def_3: Input3
combo_def_4: Input4
combo_def_5: External
state_quant: AWG Ch1 Modulate - 1
state_value_1: Burst
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1
[AWG Ch1 Trigger Mode - 1]
datatype: COMBO
def_value: NCycle
combo_def_1: Start
combo_def_2: NCycle
state_quant: AWG Ch1 Modulate - 1
state_value_1: Burst
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1

[AWG Ch1 Trigger Level - 1]
datatype: DOUBLE
unit: V
def_value: 0
state_quant: AWG Ch1 Modulate - 1
state_value_1: Burst
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1
[AWG Ch1 Input Range - 1]
datatype: COMBO
def_value: 400mVpp
combo_def_1: 400mVpp
combo_def_2: 4Vpp
combo_def_3: 40Vpp
state_quant: AWG Ch1 Modulate - 1
state_value_1: Burst
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1
[AWG Ch1 Burst Cycles - 1]
datatype: DOUBLE
def_value: 1
state_quant: AWG Ch1 Modulate - 1
state_value_1: Burst
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1
[AWG Ch1 Dead Cycles - 1]
datatype: DOUBLE
low_lim: 1
high_lim: 262144
def_value: 1
state_quant: AWG Ch1 Modulate - 1
state_value_1: Pulse
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1
[AWG Ch1 Dead Voltage - 1]
datatype: DOUBLE
unit: V
low_lim: -5
high_lim: 5
def_value: 0
state_quant: AWG Ch1 Modulate - 1
state_value_1: Pulse
section: Slot 1
second_state_quant: Instrument - Slot1
second_state_value_1: ArbitraryWaveformGenerator
group: Channel 1
[Instrument - Slot2]
datatype: COMBO
combo_def_1: WaveformGenerator 
combo_def_2: ArbitraryWaveformGenerator
combo_def_3: OSCillOSCope
combo_def_4: SpectrumAnalyzer
combo_def_5: LockInAmp
combo_def_6: FrequencyResponseAnalyzer
section: Slot 2

[OSC TimeSpan - 2]
datatype: DOUBLE
unit: s
def_value: 1E-3
low_lim: 4E-9
section: Slot 2
state_quant: Instrument - Slot2
state_value_1: OSCillOSCope


[OSC Ch1 Data - 2]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
state_quant: Instrument - Slot2
state_value_1: OSCillOSCope
section: Slot 2



[OSC Ch2 Data - 2]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
state_quant: Instrument - Slot2
state_value_1: OSCillOSCope
section: Slot 2

[WVG Ch1 Function - 2]
datatype: COMBO
def_value: Off
combo_def_1: Off
combo_def_2: Sine
combo_def_3: Square
combo_def_4: Ramp
combo_def_5: Pulse
combo_def_6: DC
section: Slot 2
state_quant: Instrument - Slot2
state_value_1: WaveformGenerator
group: Channel 1
[WVG Ch1 Frequency - 2]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 100E6
state_quant: WVG Ch1 Function - 2
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 Amplitude - 2]
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: WVG Ch1 Function - 2
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
low_lim: 4E-3
high_lim: 10
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 DC Offset - 2]
datatype: DOUBLE
def_value: 0.0
unit: V
low_lim: -5
high_lim: 5
state_quant: WVG Ch1 Function - 2
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 DC Level - 2]
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -5
high_lim: 5
state_quant: WVG Ch1 Function - 2
state_value_1: DC
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 Phase - 2]
datatype: DOUBLE
unit: deg
def_value: 0.0
state_quant: WVG Ch1 Function - 2
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
low_lim: 0
high_lim: 360
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 1


[WVG Ch1 Ramp Symmetry - 2]
datatype: DOUBLE
def_value: 50
unit: %
state_quant: WVG Ch1 Function - 2
state_value_1: Ramp
low_lim: 0
high_lim: 100
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 Duty Cycle - 2]
datatype: DOUBLE
def_value: 50
unit: %
state_quant: WVG Ch1 Function - 2
state_value_1: Square
low_lim: 0
high_lim: 100
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 Pulse Width - 2]
datatype: DOUBLE
def_value: 100E-9
unit: s
state_quant: WVG Ch1 Function - 2
state_value_1: Pulse
low_lim: 4E-9
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 Edge Time - 2]
datatype: DOUBLE
def_value: 10E-9
unit: s
state_quant: WVG Ch1 Function - 2
state_value_1: Pulse
low_lim: 4E-9
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 Modulation - 2]
datatype: BOOLEAN
def_value: 0
state_quant: WVG Ch1 Function - 2
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse

section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 Trigger Source - 2]
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: Input1
combo_def_3: Input2
combo_def_4: Input3
combo_def_5: Input4
combo_def_6: Output1
combo_def_7: Output2
combo_def_8: Output3
combo_def_9: Output4
state_quant: WVG Ch1 Modulation - 2
state_value_1: 1

section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 Mod Type - 2]
datatype: COMBO
def_value: Amplitude
combo_def_1: Amplitude
combo_def_2: Frequency
combo_def_3: Phase
combo_def_4: Burst
combo_def_5: Sweep

state_quant:WVG Ch1 Modulation - 2
state_value_1: 1
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 Mod Freq - 2]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 125E6
state_quant: WVG Ch1 Mod Type - 2
state_value_1: Amplitude
state_value_2: Frequency
state_value_3: Phase

section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 AM Depth - 2]
datatype: DOUBLE
unit: %
def_value: 50
low_lim: 0
high_lim: 100
state_quant: WVG Ch1 Mod Type - 2
state_value_1: Amplitude
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 FM Depth - 2]
datatype: DOUBLE
unit: Hz
def_value: 50
low_lim: 0
state_quant: WVG Ch1 Mod Type - 2
state_value_1: Frequency
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch1 PM Depth - 2]
datatype: DOUBLE
unit: deg
def_value: 90
low_lim: 0
high_lim:360
state_quant: WVG Ch1 Mod Type - 2
state_value_1: Phase
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 1

[WVG Ch2 Function - 2]
datatype: COMBO
def_value: Off
combo_def_1: Off
combo_def_2: Sine
combo_def_3: Square
combo_def_4: Ramp
combo_def_5: Pulse
combo_def_6: DC
section: Slot 2
state_quant: Instrument - Slot2
state_value_1: WaveformGenerator
group: Channel 2

[WVG Ch2 Frequency - 2]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 100E6
state_quant: WVG Ch2 Function - 2
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 2

[WVG Ch2 Amplitude - 2]
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: WVG Ch2 Function - 2
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
low_lim: 4E-3
high_lim: 10
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 2

[WVG Ch2 DC Offset - 2]
datatype: DOUBLE
def_value: 0.0
unit: V
low_lim: -5
high_lim: 5
state_quant: WVG Ch2 Function - 2
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 2

[WVG Ch2 DC Level - 2]
datatype: DOUBLE
unit: V
def_value: 1.0
low_lim: -5
high_lim: 5
state_quant: WVG Ch2 Function - 2
state_value_1: DC
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 2

[WVG Ch2 Phase - 2]
datatype: DOUBLE
unit: deg
def_value: 0.0
state_quant: WVG Ch2 Function - 2
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
low_lim: 0
high_lim: 360
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 2


[WVG Ch2 Ramp Symmetry - 2]
datatype: DOUBLE
def_value: 50
unit: %
state_quant: WVG Ch2 Function - 2
state_value_1: Ramp
low_lim: 0
high_lim: 100
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 2

[WVG Ch2 Duty Cycle - 2]
datatype: DOUBLE
def_value: 50
unit: %
state_quant: WVG Ch2 Function - 2
state_value_1: Square
low_lim: 0
high_lim: 100
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 2

[WVG Ch2 Pulse Width - 2]
datatype: DOUBLE
def_value: 100E-9
unit: s
state_quant: WVG Ch2 Function - 2
state_value_1: Pulse
low_lim: 4E-9
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 2

[WVG Ch2 Edge Time - 2]
datatype: DOUBLE
def_value: 10E-9
unit: s
state_quant: WVG Ch2 Function - 2
state_value_1: Pulse
low_lim: 4E-9
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
group: Channel 2

[WVG Ch2 Modulation - 2]
datatype: BOOLEAN
def_value: 0
state_quant: WVG Ch2 Function - 2
state_value_1: Sine
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
group: Channel 2

section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
[WVG Ch2 Trigger Source - 2]
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: Input1
combo_def_3: Input2
combo_def_4: Input3
combo_def_5: Input4
combo_def_6: Output1
combo_def_7: Output2
combo_def_8: Output3
combo_def_9: Output4
state_quant: WVG Ch2 Modulation - 2
state_value_1: 1
group: Channel 2

section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
[WVG Ch2 Mod Type - 2]
datatype: COMBO
def_value: Amplitude
combo_def_1: Amplitude
combo_def_2: Frequency
combo_def_3: Phase
combo_def_4: Burst
combo_def_5: Sweep
group: Channel 2

state_quant:WVG Ch2 Modulation - 2
state_value_1: 1
section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
[WVG Ch2 Mod Freq - 2]
datatype: DOUBLE
unit: Hz
def_value: 10.0
low_lim: 1E-3
high_lim: 125E6
state_quant: WVG Ch2 Mod Type - 2
state_value_1: Amplitude
state_value_2: Frequency
state_value_3: Phase
group: Channel 2

section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
[WVG Ch2 AM Depth - 2]
datatype: DOUBLE
unit: %
def_value: 50
low_lim: 0
high_lim: 100
state_quant: WVG Ch2 Mod Type - 2
state_value_1: Amplitude
group: Channel 2

section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
[WVG Ch2 FM Depth - 2]
datatype: DOUBLE
unit: Hz
def_value: 50
low_lim: 0
state_quant: WVG Ch2 Mod Type - 2
state_value_1: Frequency
group: Channel 2

section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
[WVG Ch2 PM Depth - 2]
datatype: DOUBLE
unit: deg
def_value: 90
low_lim: 0
high_lim:360
state_quant: WVG Ch2 Mod Type - 2
state_value_1: Phase
group: Channel 2

section: Slot 2
second_state_quant: Instrument - Slot2
second_state_value_1: WaveformGenerator
[Instrument - Slot3]
datatype: COMBO
combo_def_1: WaveformGenerator 
combo_def_2: ArbitraryWaveformGenerator
combo_def_3: OSCillOSCope
combo_def_4: SpectrumAnalyzer
combo_def_5: LockInAmp
combo_def_6: FrequencyResponseAnalyzer
section: Slot 3

[Instrument - Slot4]
datatype: COMBO
combo_def_1: WaveformGenerator 
combo_def_2: ArbitraryWaveformGenerator
combo_def_3: OSCillOSCope
combo_def_4: SpectrumAnalyzer
combo_def_5: LockInAmp
combo_def_6: FrequencyResponseAnalyzer
section: Slot 4

