# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Moku Pro Oscilloscope

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Moku_Pro_Oscilloscope

# Define that the driver is a Signal Generator
signal_generator: True

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
[Time Span]
datatype: DOUBLE
unit: s
def_value: 1E-3
low_lim: 4E-9

[Disable Input - Ch1]
datatype: BOOLEAN
def_value: 0


[Data - Ch1]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
state_quant: Disable Input - Ch1
state_value_1: 0


[Disable Input - Ch2]
datatype: BOOLEAN
def_value: 0


[Data - Ch2]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
state_quant: Disable Input - Ch2
state_value_1: 0


[Disable Input - Ch3]
datatype: BOOLEAN
def_value: 0


[Data - Ch3]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
state_quant: Disable Input - Ch3
state_value_1: 0

[Disable Input - Ch4]
datatype: BOOLEAN
def_value: 0

[Data - Ch4]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
state_quant: Disable Input - Ch4
state_value_1: 0
